extension = ".jpg";
dir1 = getDirectory("Choose Source Directory ");
setBatchMode(true);
n = 0;
processFolder(dir1);

function processFolder(dir1) {
     list = getFileList(dir1);
     for (i=0; i<list.length; i++) {
          if (endsWith(list[i], "/"))
              processFolder(dir1+list[i]);
          else if (endsWith(list[i], extension))
             processImage(dir1, list[i]);
      }
  }

  function processImage(dir1, name) {
     open(dir1+name);
     print(n++, name);
    setAutoThreshold("Default");
   run("Threshold...");
   setThreshold(0,128);
   setOption("BlackBackground", false);
   run("Convert to Mask");
   run("Analyze Particles...", "display");
  }
